<?xml version="1.0" encoding="UTF-8"?>
<gadgetronStreamConfiguration xsi:schemaLocation="http://gadgetron.sf.net/gadgetron gadgetron.xsd"
        xmlns="http://gadgetron.sf.net/gadgetron"
        xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance">

    <reader>
      <slot>1008</slot>
      <dll>gadgetron_mricore</dll>
      <classname>GadgetIsmrmrdAcquisitionMessageReader</classname>
    </reader>

    <writer>
      <slot>1022</slot>
      <dll>gadgetron_mricore</dll>
      <classname>MRIImageWriter</classname>
    </writer>

    <gadget>
      <name>AccReconPython</name>
      <dll>gadgetron_python</dll>
      <classname>PythonGadget</classname>
      <property><name>python_path</name>                  <value>/volatile/Gadgetron/Developpement/Reconstruction</value></property>
      <property><name>python_module</name>                <value>non_linear_reconstruction</value></property>
      <property><name>python_class</name>                <value>AccumulateAndRecon</value></property>
    </gadget>

    <gadget>
      <name>Extract</name>
      <dll>gadgetron_mricore</dll>
      <classname>ExtractGadget</classname>
    </gadget>

    <gadget>
        <name>ImageFinish</name>
        <dll>gadgetron_mricore</dll>
        <classname>ImageFinishGadget</classname>
    </gadget>

</gadgetronStreamConfiguration>
